PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  color = $[1,1,1]
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Experiment info = {u'participant': u''}
  expName = cognitive_load
  Units = use prefs
  Save log file = False
  Screen = 1
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Routines
  Routine end_text
    TextComponent text_9
      color = black
      text = Congratulations, you have finished counting by 3 in the item setting task.
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine intro_text
    TextComponent text
      colorSpace = dkl
      color = black
      text = Welcome to the item setting task.
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_5
      color = black
      text = Press the space bar to start the task.
      pos = (0, -.5)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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    TextComponent text_7
      color = black
      text = Version: Counting by 3
      pos = (0, -.2)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine trial
    SoundComponent sound_6
      sound [set every repeat] = sounds/bell.wav
      volume [set every repeat] = 10
      stopVal [duration (s)] = .5
      startVal [time (s)] = 0
    TextComponent text_6
      color = black
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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  Routine end_sound
    SoundComponent sound_1
      sound = sounds/fanfare.wav
      volume = 25
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
  Routine trial_countdown
    TextComponent text_2
      color = black
      text = 3
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    TextComponent text_3
      color = black
      text = 2
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 1
      letterHeight = 0.2
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    TextComponent text_4
      color = black
      text = 1
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 2
      letterHeight = 0.2
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  Routine trial_name
    TextComponent text_14
      color = black
      text [set every repeat] = $(trials_three)
      startVal [time (s)] = 0.0
      letterHeight = 0.10
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  Routine intro_text
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials_with_three.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'trials_three': u'Counting back from 100 by 3'},
      {u'trials_three': u'Place the Items'},
      {u'trials_three': u'Place the Items and count back from 100 by 3'}]
    Routine trial_name
    Routine trial_countdown
    LoopInitiator CUSTOM_TIME loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 12
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      Routine trial
    LoopTerminator CUSTOM_TIME
    Routine end_sound
  LoopTerminator trials
  Routine end_text
