PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  color = $[1,1,1]
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Experiment info = {u'participant': u''}
  expName = fingers
  Units = use prefs
  Save log file = False
  Screen = 1
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Routines
  Routine stimuli
    ImageComponent image
      startVal [time (s)] = 0.0
      image [set every repeat] = $finger_images
      size = (1.0, 1.0)
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    RatingScaleComponent rating
      pos = 0, -0.6
      high = 5
      startVal [time (s)] = 0.0
      size = 1.0
      forceEndRoutine = True
      low = 1
      scaleDescription = Fingers
      categoryChoices = Pinky, Ring, Middle, Index, Thumb
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  Routine intro_text
    TextComponent text
      color = black
      stopVal [time (s)] = 5.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        WELCOME!
        This is the finger tapping task!

        This task includes 3 repetitions.
        Each finger will be tapped three times.
  Routine end_text
    TextComponent text_2
      color = black
      text = All finished.
      stopVal [time (s)] = 5.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine intro_text
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = finger-images.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [{'finger_images': u'./images/middle.jpg'},
      {'finger_images': u'./images/index.jpg'},
      {'finger_images': u'./images/ring.jpg'},
      {'finger_images': u'./images/pinky.jpg'},
      {'finger_images': u'./images/thumb.jpg'},
      {'finger_images': u'./images/pinky.jpg'},
      {'finger_images': u'./images/index.jpg'},
      {'finger_images': u'./images/ring.jpg'},
      {'finger_images': u'./images/middle.jpg'},
      {'finger_images': u'./images/middle.jpg'},
      {'finger_images': u'./images/index.jpg'},
      {'finger_images': u'./images/thumb.jpg'},
      {'finger_images': u'./images/pinky.jpg'},
      {'finger_images': u'./images/thumb.jpg'},
      {'finger_images': u'./images/ring.jpg'}]
    Routine stimuli
  LoopTerminator trials
  Routine end_text
